CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Channel(?P<Channel>.*)_TileNr(?P<TileNumber>.*)_LocationXX(?P<NW_XX>.*)_YY(?P<NW_YY>.*).TIFF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "DIA-Ph3")
    Name to assign these images:BrightField
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "FITC3")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "TRITC-1")
    Name to assign these images:Yap
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:80
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.005,0.03
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:BrightField
    Name the output image:IllumBrightField
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:50
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:Actin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:100
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:Yap
    Name the output image:IllumYap
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:250
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:12|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
    Select the input image:Yap
    Name the output image:CorrYap
    Select the illumination function:IllumYap
    Select how the illumination function is applied:Divide
    Select the input image:BrightField
    Name the output image:CorrBrightField
    Select the illumination function:IllumBrightField
    Select how the illumination function is applied:Divide
    Select the input image:Actin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifyActin
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrActin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.002,0.02
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    Lower outlier fraction:0.005
    Upper outlier fraction:0.25
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2
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
GrayToColor:[module_num:14|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored blue:CorrDNA
    Name the output image:ColorDAPI
    Relative weight for the red image:1
    Relative weight for the green image:1.0
    Relative weight for the blue image:3
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
OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorDAPI
    Name the output image:OutlinesDAPI
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:16|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OutlinesDAPI
    Text color:blue
    Name the output image that has the measurements displayed:DisplayNucleiNr_DAPI
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:normal

GrayToColor:[module_num:17|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:CorrBrightField
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    Select the image to be colored blue:CorrDNA
    Name the output image:Color_BF_DAPI
    Relative weight for the red image:0.8
    Relative weight for the green image:1.0
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Color_BF_DAPI
    Name the output image:Outlines_BF_DAPI
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Outlines_BF_DAPI
    Text color:blue
    Name the output image that has the measurements displayed:DisplayNucleiNr_BF_DAPI
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:normal

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:IdentifyActin
    Select neighboring objects to measure:IdentifyActin
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:IdentifyActin
    Name the output objects:ActinWithoutNeighbours
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:ActinWithNeighbours
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select additional object to relabel:FilteredNuclei
    Name the relabeled objects:NucleiNoNeighbours
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
GrayToColor:[module_num:22|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:CorrBrightField
    Select the image to be colored green:CorrActin
    Select the image to be colored blue:CorrDNA
    Name the output image:ColorActinDNA
    Relative weight for the red image:0.8
    Relative weight for the green image:1.0
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorActinDNA
    Name the output image:Outlines_Actin_DNA_BF
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:NucleiNoNeighbours
    Select outline color:cyan
    Select objects to display:ActinWithoutNeighbours

DisplayDataOnImage:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Outlines_Actin_DNA_BF
    Text color:blue
    Name the output image that has the measurements displayed:DisplayNucleiNr_BF_DAPI_Actin
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayNucleiNr_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Dapi_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:DisplayNucleiNr_BF_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen\\No_Neighbours\\Dapi_BF_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:DisplayNucleiNr_BF_DAPI_Actin
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen\\No_Neighbours\\Dapi_BF_Actin_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifySecondaryObjects:[module_num:28|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifyYAP
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrYap
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
SaveCroppedObjects:[module_num:29|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
    Do you want to save cropped images or object masks?:Images
    Objects:ActinWithoutNeighbours
    Directory:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen\\CroppedObjectsNoNeighbours
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:Actin
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:DisplayNucleiNr_BF_DAPI_Actin

SaveCroppedObjects:[module_num:30|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
    Do you want to save cropped images or object masks?:Images
    Objects:ActinWithNeighbours
    Directory:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen\\CroppedObjectsWithNeighbours
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:Actin
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:DisplayNucleiNr_BF_DAPI_Actin

MeasureObjectIntensity:[module_num:31|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
    Select images to measure:CorrActin, CorrDNA, CorrYap
    Select objects to measure:ActinWithoutNeighbours, NucleiNoNeighbours

MeasureObjectSizeShape:[module_num:32|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
    Select object sets to measure:ActinWithoutNeighbours, NucleiNoNeighbours
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ActinWithoutNeighbours|Intensity_StdIntensityEdge_CorrDNA,ActinWithoutNeighbours|Intensity_StdIntensityEdge_CorrYap,ActinWithoutNeighbours|Intensity_StdIntensityEdge_CorrActin,ActinWithoutNeighbours|Intensity_MeanIntensity_CorrActin,ActinWithoutNeighbours|Intensity_MeanIntensity_CorrDNA,ActinWithoutNeighbours|Intensity_MeanIntensity_CorrYap,ActinWithoutNeighbours|Intensity_MaxIntensityEdge_CorrDNA,ActinWithoutNeighbours|Intensity_MaxIntensityEdge_CorrYap,ActinWithoutNeighbours|Intensity_MaxIntensityEdge_CorrActin,ActinWithoutNeighbours|Intensity_MeanIntensityEdge_CorrDNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NoNeighbours
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:34|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\0. PhD\\ZZZZ. Temp processing nikita and Koen\\Output\\CP_Output_Koen
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:ActinWithoutNeighbours,NucleiNoNeighbours
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:NucleiNoNeighbours
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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